PsychoPy2experiment version="2021.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.0000, -1.0000, -1.0000]
  expName = Demo
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Routines
  Routine cue
    ImageComponent Cue
      image = Task samples\cue.png
      saveStartStop = False
      size = (0.8, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent instructions
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
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      text:
        请你通过上方呈现的三个图像中
        找出规则，并在下图的两组图像
        （每组分别有三个图像）中
        选择正确呈现该规则的一组图像
        选择左侧按”1“，右侧按”2“
  Routine trial1
    ImageComponent Fixation1
      image = Task samples\Fixation.png
      size = (0.8, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent Trial1
      image [set every repeat] = $images
      size = (0.8, 0.7)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 8
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 8
      storeCorrect = True
      syncScreenRefresh = False
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  Routine trial2
    ImageComponent Fixation2
      image = Task samples\Fixation.png
      size = (0.8, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Trial2
      image [set every repeat] = $images
      size = (0.8, 0.7)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 8
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 8
      storeCorrect = True
      syncScreenRefresh = False
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Flow
  Routine cue
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:30
    conditionsFile = task_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'images': 'Task samples\\相同颜色及位置1.png'},
      {'images': 'Task samples\\相同颜色及位置2.png'},
      {'images': 'Task samples\\相同颜色及位置3.png'},
      {'images': 'Task samples\\相同颜色及位置4.png'},
      {'images': 'Task samples\\相同颜色及位置5.png'},
      {'images': 'Task samples\\相同颜色及位置6.png'},
      {'images': 'Task samples\\相同颜色及位置7.png'},
      {'images': 'Task samples\\相同颜色及位置8.png'},
      {'images': 'Task samples\\相同颜色及位置9.png'},
      {'images': 'Task samples\\相同颜色及位置10.png'}]
    Routine trial1
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 31:60
    conditionsFile = task_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'images': 'Task samples\\相同颜色及位置1.png', 'correctAns': 1},
      {'images': 'Task samples\\相同颜色及位置2.png', 'correctAns': 2},
      {'images': 'Task samples\\相同颜色及位置3.png', 'correctAns': 2},
      {'images': 'Task samples\\相同颜色及位置4.png', 'correctAns': 1},
      {'images': 'Task samples\\相同颜色及位置5.png', 'correctAns': 1},
      {'images': 'Task samples\\相同颜色及位置6.png', 'correctAns': 2},
      {'images': 'Task samples\\相同颜色及位置7.png', 'correctAns': 1},
      {'images': 'Task samples\\相同颜色及位置8.png', 'correctAns': 2},
      {'images': 'Task samples\\相同颜色及位置9.png', 'correctAns': 1},
      {'images': 'Task samples\\相同颜色及位置10.png', 'correctAns': 2},
      {'images': 'Task samples\\相同位置及边数1.png', 'correctAns': 1},
      {'images': 'Task samples\\相同位置及边数2.png', 'correctAns': 1},
      {'images': 'Task samples\\相同位置及边数3.png', 'correctAns': 2},
      {'images': 'Task samples\\相同位置及边数4.png', 'correctAns': 1},
      {'images': 'Task samples\\相同位置及边数5.png', 'correctAns': 1},
      {'images': 'Task samples\\相同位置及边数6.png', 'correctAns': 2},
      {'images': 'Task samples\\相同位置及边数7.png', 'correctAns': 1},
      {'images': 'Task samples\\相同位置及边数8.png', 'correctAns': 1},
      {'images': 'Task samples\\相同位置及边数9.png', 'correctAns': 2},
      {'images': 'Task samples\\相同位置及边数10.png', 'correctAns': 1},
      {'images': 'Task samples\\相同颜色及边数1.png', 'correctAns': 1},
      {'images': 'Task samples\\相同颜色及边数2.png', 'correctAns': 1},
      {'images': 'Task samples\\相同颜色及边数3.png', 'correctAns': 2},
      {'images': 'Task samples\\相同颜色及边数4.png', 'correctAns': 2},
      {'images': 'Task samples\\相同颜色及边数5.png', 'correctAns': 1},
      {'images': 'Task samples\\相同颜色及边数6.png', 'correctAns': 1}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
    Routine trial2
  LoopTerminator trials_2
