PsychoPy2experiment version="2021.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.0000, -1.0000, -1.0000]
  expName = taskSwitching
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Routines
  Routine Fixation
    ImageComponent fixation
      image = taskSamples\Fixation.png
      size = (0.8, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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  Routine Image1
    ImageComponent image1
      image [set every frame] = $images1
      size = (0.8, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration1
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    KeyboardComponent key_resp_1
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration1
      storeCorrect = True
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  Routine Image2
    ImageComponent image
      image [set every frame] = $images2
      size = (0.8, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration2
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  Routine Image3
    ImageComponent image_2
      image [set every frame] = $images3
      size = (0.8, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration3
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration3
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialN': 1, 'images1': 'taskSamples\\A6_1.png', 'duration1': 8, 'images2': None, 'duration2': 0, 'images3': None, 'duration3': 0, 'correctAns': 1},
      {'trialN': 2, 'images1': 'taskSamples\\A20_2.png', 'duration1': 8, 'images2': None, 'duration2': 0, 'images3': None, 'duration3': 0, 'correctAns': 2},
      {'trialN': 3, 'images1': 'taskSamples\\B17.png', 'duration1': 5, 'images2': None, 'duration2': 0, 'images3': None, 'duration3': 0, 'correctAns': 2},
      {'trialN': 4, 'images1': 'taskSamples\\B8.png', 'duration1': 5, 'images2': None, 'duration2': 0, 'images3': None, 'duration3': 0, 'correctAns': 2},
      {'trialN': 5, 'images1': 'taskSamples\\C4_Spatial_ADD_1.png', 'duration1': 8, 'images2': 'taskSamples\\C4_Spatial_ADD_2.png', 'duration2': 2, 'images3': 'taskSamples\\C4_Spatial_ADD_3.png', 'duration3': 5, 'correctAns': 1},
      {'trialN': 6, 'images1': 'taskSamples\\C3_Episodic_SUB_1.png', 'duration1': 8, 'images2': 'taskSamples\\C3_Episodic_SUB_2.png', 'duration2': 2, 'images3': 'taskSamples\\C3_Episodic_SUB_3.png', 'duration3': 5, 'correctAns': 1},
      {'trialN': 7, 'images1': 'taskSamples\\B18.png', 'duration1': 5, 'images2': None, 'duration2': 0, 'images3': None, 'duration3': 0, 'correctAns': 2},
      {'trialN': 8, 'images1': 'taskSamples\\B2.png', 'duration1': 5, 'images2': None, 'duration2': 0, 'images3': None, 'duration3': 0, 'correctAns': 2},
      {'trialN': 9, 'images1': 'taskSamples\\A14_2.png', 'duration1': 8, 'images2': None, 'duration2': 0, 'images3': None, 'duration3': 0, 'correctAns': 2}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
    Routine Fixation
    Routine Image1
    Routine Image2
    Routine Image3
  LoopTerminator trials
