PsychoPy2experiment version="2021.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = untitled
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Routines
  Routine trial
    DotsComponent dots
      coherence = 1.0
      dir = 0.0
      dotLife = 0
      dotSize = 35
      fieldPos [set every repeat] = field_position
      fieldShape = circle
      fieldSize = 0.3
      nDots = 9
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent equation
      letterHeight = 0.15
      pos [set every repeat] = pos1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        $equations
    TextComponent number
      letterHeight = 0.15
      pos [set every repeat] = pos2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $numbers
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = 2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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  Routine fixation
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instruction
    TextComponent text_3
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        比较三个项目之间是否相等，相等的话按1键，不相等的话按2键
        准备好了按一键开始
    KeyboardComponent key_resp_2
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine routine_1
  Routine trail2
Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trail.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'dot': 9, 'equations': '5+3', 'numbers': 9, 'field_position': (0, 0.3), 'pos1': (0.35, -0.3), 'pos2': (-0.35, -0.3)},
      {'dot': 5, 'equations': '4+2', 'numbers': 6, 'field_position': (0.35, -0.3), 'pos1': (-0.35, -0.3), 'pos2': (0, 0.3)},
      {'dot': 5, 'equations': '2+2', 'numbers': 4, 'field_position': (0, 0.3), 'pos1': (-0.35, -0.3), 'pos2': (0.35, -0.3)},
      {'dot': 7, 'equations': '2+6', 'numbers': 7, 'field_position': (-0.35, -0.3), 'pos1': (0.35, -0.3), 'pos2': (0, 0.3)}]
    Routine fixation
    Routine trial
  LoopTerminator trials
